<CompuCell3D Revision="2" Version="4.6.0">
   
   <Metadata>
      <NumberOfProcessors>1</NumberOfProcessors>
      <DebugOutputFrequency>10</DebugOutputFrequency>
   </Metadata>
   
   <Potts>
      <Dimensions x="200" y="200" z="1"/>
      <Anneal>10</Anneal>
      <Steps>10000</Steps>
      <Temperature>10.0</Temperature>
      <Flip2DimRatio>1</Flip2DimRatio>
      <NeighborOrder>2</NeighborOrder>
      <Boundary_x>Periodic</Boundary_x>
      <Boundary_y>Periodic</Boundary_y>
   </Potts>

   <Plugin Name="Volume"/>

   <Plugin Name="Surface">
      <TargetSurface>20</TargetSurface>
      <LambdaSurface>1.5</LambdaSurface>
   </Plugin>
   
   <Plugin Name="CellType">
      <CellType TypeName="Medium" TypeId="0"/>
      <CellType TypeName="Condensing" TypeId="1"/>
      <CellType TypeName="NonCondensing" TypeId="2"/>
   </Plugin>
   
   <Plugin Name="Contact">
      <Energy Type1="Medium" Type2="Medium">0</Energy>
      <Energy Type1="NonCondensing" Type2="NonCondensing">16</Energy>
      <Energy Type1="Condensing"    Type2="Condensing">2</Energy>
      <Energy Type1="NonCondensing" Type2="Condensing">11</Energy>
      <Energy Type1="NonCondensing" Type2="Medium">16</Energy>
      <Energy Type1="Condensing"    Type2="Medium">16</Energy>
      <NeighborOrder>2</NeighborOrder>
   </Plugin>

   </CompuCell3D>
