<CompuCell3D Revision="2" Version="4.6.0">
   
   <Metadata>
      <NumberOfProcessors>1</NumberOfProcessors>
      <DebugOutputFrequency>10</DebugOutputFrequency>
   </Metadata>
   
   <Potts>
      <Dimensions x="200" y="200" z="1"/>
      <Steps>100000</Steps>
      <Temperature>10.0</Temperature>
      <NeighborOrder>2</NeighborOrder>
      <Boundary_x>Periodic</Boundary_x>
      <Boundary_y>Periodic</Boundary_y>
   </Potts>
   
   <Plugin Name="CellType">
      <CellType TypeId="0" TypeName="Medium"/>
      <CellType TypeId="1" TypeName="TCell"/>
      <CellType TypeId="2" TypeName="Dynabead"/>
   </Plugin>
   
    <Plugin Name="VolumeLocalFlex">
       <VolumeLocalFlexEnergyParameters CellType="TCell" LambdaVolume="2.0" TargetVolume="64"/>
       <VolumeLocalFlexEnergyParameters CellType="Dynabead" LambdaVolume="2.0" TargetVolume="25"/>
    </Plugin>

    <Plugin Name="SurfaceLocalFlex">
       <SurfaceLocalFlexEnergyParameters CellType="TCell" LambdaSurface="2.0" TargetSurface="32"/>
       <SurfaceLocalFlexEnergyParameters CellType="Dynabead" LambdaSurface="2.0" TargetSurface="20"/>
    </Plugin>
      
   <Plugin Name="Contact">
      <Energy Type1="Medium" Type2="Medium">0.0</Energy>
      <Energy Type1="Medium" Type2="TCell">10.0</Energy>
      <Energy Type1="Medium" Type2="Dynabead">10.0</Energy>
      <Energy Type1="TCell" Type2="TCell">10.0</Energy>
      <Energy Type1="TCell" Type2="Dynabead">0.0</Energy>
      <Energy Type1="Dynabead" Type2="Dynabead">30.0</Energy>
      <NeighborOrder>4</NeighborOrder>
   </Plugin>
   
   <Plugin Name="NeighborTracker"/>
   

   
   <Plugin Name="ExternalPotential"/>
   
   
   <Plugin Name="PixelTracker">
      <TrackMedium/>
   </Plugin>
   
   


</CompuCell3D>
