<CompuCell3D Revision="2" Version="4.6.0">
   
   <Metadata>
      
      <NumberOfProcessors>1</NumberOfProcessors>
      <DebugOutputFrequency>10</DebugOutputFrequency>
   </Metadata>
   
   <Potts>
      <Dimensions x="500" y="500" z="1"/>
      <Steps>6000000</Steps>
      <Temperature>10.0</Temperature>
      <NeighborOrder>4</NeighborOrder>
      <Boundary_x>Periodic</Boundary_x>
      <Boundary_y>Periodic</Boundary_y>
   </Potts>
   
   <Plugin Name="CellType">
      <CellType TypeId="0" TypeName="Medium"/>
      <CellType TypeId="1" TypeName="TCell"/>
      <CellType TypeId="2" TypeName="Dynabead"/>
      <CellType TypeId="3" TypeName="ActivatedTCell"/>
   </Plugin>
   
   <Plugin Name="Volume"/>
   
   <Plugin Name="Surface"/>
   
   <Plugin Name="CenterOfMass"/>
   
   <Plugin Name="NeighborTracker"/>
     
   
<Plugin Name="Contact">
   <Energy Type1="Medium" Type2="Medium">0.0</Energy>
   <Energy Type1="Medium" Type2="TCell">20.0</Energy>
   <Energy Type1="Medium" Type2="Dynabead">20.0</Energy>
   <Energy Type1="Medium" Type2="ActivatedTCell">18.0</Energy>  <!-- Activated cells have slightly lower surface tension -->
   <Energy Type1="TCell" Type2="TCell">30.0</Energy>
   <Energy Type1="TCell" Type2="Dynabead">15.0</Energy>
   <Energy Type1="TCell" Type2="ActivatedTCell">25.0</Energy>  <!-- Activated cells attract other T-cells -->
   <Energy Type1="Dynabead" Type2="Dynabead">100.0</Energy>
   <Energy Type1="Dynabead" Type2="ActivatedTCell">12.0</Energy>  <!-- Stronger binding to dynabeads -->
   <Energy Type1="ActivatedTCell" Type2="ActivatedTCell">20.0</Energy>  <!-- Activated cells cluster less than non-activated -->
   <NeighborOrder>4</NeighborOrder>
</Plugin>


<Steppable Type="DiffusionSolverFE">
   <DiffusionField Name="Nutrient">
      <DiffusionData>
         <FieldName>Nutrient</FieldName>
         <GlobalDiffusionConstant>0.1</GlobalDiffusionConstant>
         <GlobalDecayConstant>0.001</GlobalDecayConstant> 
         <InitialConcentrationExpression>100.0</InitialConcentrationExpression>
      </DiffusionData>
      <SecretionData>
         <Secretion Type="Medium">0.01</Secretion>
      </SecretionData>
      <BoundaryConditions>
         <Plane Axis="X">
            <Periodic/>

         </Plane>
         <Plane Axis="Y">
            <Periodic/>
         </Plane>
      </BoundaryConditions>
   </DiffusionField>
</Steppable>

</CompuCell3D>



<!-- Some comments on DiffusionSolverFE -->
<!-- 
- GlobalDiffusionConstant: Controls how quickly nutrients spread through space, gradual diffusion
- GlobalDecayConstant: Degradation of nutrients over time. Each step, the concentration at each point decreases by 0.1% (0.001 × current value)
- InitialConcentrationExpression: Sets the starting concentration of nutrients throughout the field to 100 units. This can be a constant value (as shown) or a mathematical expression (e.g., "100.0*x/500" would create a gradient).
- Secretion Type="Medium": The medium (non-cell space) secretes nutrients at a rate of 0.01 units per MCS. This represents a slow, continuous replenishment of nutrients from the environment. This slow rate ensures that nutrients will eventually become limiting in dense cell regions.
- <Plane Axis="X"> and <Plane Axis="Y">: These set conditions for the X and Y boundaries of your 2D simulation.
















-->
