<CompuCell3D Revision="2" Version="4.6.0">
   
   <Metadata>
      <NumberOfProcessors>1</NumberOfProcessors>
      <DebugOutputFrequency>10</DebugOutputFrequency>
   </Metadata>
   
   <Potts>
      <Dimensions x="1000" y="1000" z="1"/>
      <Steps>1000</Steps>
      <Temperature>10.0</Temperature>
      <NeighborOrder>2</NeighborOrder>
      <!-- <Boundary_x>Periodic</Boundary_x> -->
      <!-- <Boundary_y>Periodic</Boundary_y> -->
   </Potts>
   

   <Plugin Name="CellType">
      <CellType TypeId="0" TypeName="Medium"/>
      <CellType TypeId="1" TypeName="Tcell"/>
      <CellType TypeId="2" TypeName="Dynabead"/>
   </Plugin>
   
   <Plugin Name="Volume"/>
   
   <Plugin Name="Surface"/>
   
   <Plugin Name="CenterOfMass"/>
   
   <Plugin Name="NeighborTracker"/>
   
   <Plugin Name="Contact">
      <Energy Type1="Medium" Type2="Medium">0.0</Energy>
      <Energy Type1="Medium" Type2="Tcell">3.52</Energy>
      <Energy Type1="Medium" Type2="Dynabead">62.83</Energy>
      <Energy Type1="Tcell" Type2="Tcell">30.0</Energy>
      <Energy Type1="Tcell" Type2="Dynabead">15.0</Energy>
      <Energy Type1="Dynabead" Type2="Dynabead">5.0</Energy>
      <NeighborOrder>4</NeighborOrder>
   </Plugin>
   
</CompuCell3D>
