<CompuCell3D Revision="2" Version="4.6.0">
   
   <Metadata>
      <NumberOfProcessors>1</NumberOfProcessors>
      <DebugOutputFrequency>10</DebugOutputFrequency>
   </Metadata>
   
   <Potts>
      <Dimensions x="200" y="200" z="1"/>
      <Steps>100000</Steps>
      <Temperature>10.0</Temperature>
      <NeighborOrder>3</NeighborOrder>
      <Boundary_x>Periodic</Boundary_x>
      <Boundary_y>Periodic</Boundary_y>
   </Potts>
   
   <Plugin Name="CellType">
      <CellType TypeId="0" TypeName="Medium"/>
      <CellType TypeId="1" TypeName="ST"/>
      <CellType TypeId="2" TypeName="TD"/>
   </Plugin>
   
   <Plugin Name="Volume"/>
   
   <Plugin Name="Secretion">
   </Plugin>
   
   <Plugin Name="Surface">
      <TargetSurface>20</TargetSurface>
      <LambdaSurface>1.5</LambdaSurface>
   </Plugin>
   
   <Plugin Name="Contact">
      <!-- Specification of adhesion energies -->
      <Energy Type1="Medium" Type2="Medium">10.0</Energy>
      <Energy Type1="Medium" Type2="ST">10.0</Energy>
      <Energy Type1="Medium" Type2="TD">10.0</Energy>
      <Energy Type1="ST" Type2="ST">10.0</Energy>
      <Energy Type1="ST" Type2="TD">10.0</Energy>
      <Energy Type1="TD" Type2="TD">10.0</Energy>
      <NeighborOrder>4</NeighborOrder>
   </Plugin>
   
   <Steppable Type="DiffusionSolverFE">
      
      <DiffusionField Name="nutrient">
         <DiffusionData>
            <FieldName>nutrient</FieldName>
            <GlobalDiffusionConstant>0.1</GlobalDiffusionConstant>
            <GlobalDecayConstant>0.0</GlobalDecayConstant>
            <!-- <InitialConcentrationExpression>x*y</InitialConcentrationExpression> -->
            <!-- <ConcentrationFileName>INITIAL CONCENTRATION FIELD - typically a file with path Simulation/NAME_OF_THE_FILE.txt</ConcentrationFileName> -->
            <!--DiffusionCoefficient CellType="ST">0.1</DiffusionCoefficient-->
            <!--DiffusionCoefficient CellType="TD">0.1</DiffusionCoefficient-->
            <!--DecayCoefficient CellType="ST">0.0001</DecayCoefficient-->
            <!--DecayCoefficient CellType="TD">0.0001</DecayCoefficient-->
         </DiffusionData>
         <SecretionData>
            <ConstantConcentration Type="Medium">1.0</ConstantConcentration>
         </SecretionData>
         <BoundaryConditions>
            <Plane Axis="X">
               <Periodic/>
            </Plane>
            <Plane Axis="Y">
               <Periodic/>
            </Plane>
         </BoundaryConditions>
      </DiffusionField>
   </Steppable>
   
</CompuCell3D>
